PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ABstudy
  keyboardBackend = ioHub
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Routines
  Routine AB_Test
    VariableComponent curImage
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        trialClock = core.Clock()
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
        frame = 0
        #imgOnScreen = False
      Each Frame:
        t = trialClock.getTime()

        curImage = "resources\\JPG\\" + Img1
        imageCount = 1

        if t>StimLength:
            curImage = "resources\\JPG\\" + Img2
            imageCount = 2

        if t>StimLength*2:
            curImage = "resources\\JPG\\" + Img3
            imageCount = 3

        if t>StimLength*3:
            curImage = "resources\\JPG\\" + Img4
            imageCount = 4

        if t>StimLength*4:
            if Img5 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img5
                imageCount = 5

        if t>StimLength*5:
            if Img6 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img6
                imageCount = 6

        if t>StimLength*6:
            if Img7 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img7
                imageCount = 7

        if t>StimLength*7:
            if Img8 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img8
                imageCount = 8

        if t>StimLength*8:
            if Img9 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img9
                imageCount = 9

        if t>StimLength*9:
            if Img10 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img10
                imageCount = 10

        if t>StimLength*10:
            if Img11 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img11
                imageCount = 11

        if t>StimLength*11:
            if Img12 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img12
                imageCount = 12

        if t>StimLength*12:
            if Img13 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img13
                imageCount = 13

        if t>StimLength*13:
            if Img14 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img14
                imageCount = 14

        if t>StimLength*14:
            if Img15 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img15
                imageCount = 15

        if t>StimLength*15 :
            if Img16 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img16
                imageCount = 16

        if t>StimLength*16:
            if Img17 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img17
                imageCount = 17

        curImage = curImage + ".jpg"

        #if !exists(curImage):
        #    Practice_Trials.addData('ErrorImage', curImage)
         #   curImage = "resources\\JPG\\" + "blender.jpg"
    ImageComponent Rapid_Image_Present
      image [set every frame] = $curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 10000
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  Routine T1_Response
    TextComponent T1Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T1cue
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T2_Response
    TextComponent T2Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you see the blender?
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Instructions here
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    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_AB_Test
    VariableComponent Prac_curImage
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        trialClock = core.Clock()
        from os.path import exists
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
        #imgOnScreen = False
      Each Frame:
        t = trialClock.getTime()

        curImage = "resources\\JPG\\" + Img1
        imageCount = 1

        if t>StimLength + 1.5:
            curImage = "resources\\JPG\\" + Img2
            imageCount = 2

        if t>StimLength*2 + 1.5:
            curImage = "resources\\JPG\\" + Img3
            imageCount = 3

        if t>StimLength*3 + 1.5:
            curImage = "resources\\JPG\\" + Img4
            imageCount = 4

        if t>StimLength*4 + 1.5:
            if Img5 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img5
                imageCount = 5

        if t>StimLength*5 + 1.5:
            if Img6 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img6
                imageCount = 6

        if t>StimLength*6 + 1.5:
            if Img7 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img7
                imageCount = 7

        if t>StimLength*7 + 1.5:
            if Img8 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img8
                imageCount = 8

        if t>StimLength*8 + 1.5:
            if Img9 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img9
                imageCount = 9

        if t>StimLength*9 + 1.5:
            if Img10 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img10
                imageCount = 10

        if t>StimLength*10 + 1.5:
            if Img11 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img11
                imageCount = 11

        if t>StimLength*11 + 1.5:
            if Img12 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img12
                imageCount = 12

        if t>StimLength*12 + 1.5:
            if Img13 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img13
                imageCount = 13

        if t>StimLength*13 + 1.5:
            if Img14 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img14
                imageCount = 14

        if t>StimLength*14 + 1.5:
            if Img15 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img15
                imageCount = 15

        if t>StimLength*15 + 1.5:
            if Img16 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img16
                imageCount = 16

        if t>StimLength*16 + 1.5:
            if Img17 == "blankImage":
                continueRoutine = False
            else:
                curImage = "resources\\JPG\\" + Img17
                imageCount = 17

        curImage = curImage + ".jpg"

        #if !exists(curImage):
        #    Practice_Trials.addData('ErrorImage', curImage)
         #   curImage = "resources\\JPG\\" + "blender.jpg"
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cueWord
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    TextComponent Fixation_Cross_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Rapid_Image_Present_2
      image [set every frame] = $curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 10000
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  Routine Practice_T1
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent T1Response_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T1cue
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  Routine Practice_T2
    TextComponent T2Response_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you see the blender?
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Instructions
    TextComponent Practice_Ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Practice trials instructions here
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    KeyboardComponent End_Prac_Ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine textFix
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cueWord
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
      text = +
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Flow
  Routine Practice_Instructions
  LoopInitiator Practice_Trials loopType="TrialHandler"
    conditionsFile = C:/Users/User/OneDrive/Documents/GitHub/Test/Practice_Condition.xlsx
    loopType = sequential
    nReps = 1
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    Routine Practice_AB_Test
    Routine Practice_T1
    Routine Practice_T2
  LoopTerminator Practice_Trials
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/User/OneDrive/Documents/GitHub/Test/Practice_Condition_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 3, 'TotalImg': 13, 'cueWord': 'lollipop', 'T1cue': 'Did you see the lollipop?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'brownsugar', 'Img2': 'candle01', 'Img3': 'match', 'Img4': 'printer02', 'Img5': 'lollipop04', 'Img6': 'balloon01b', 'Img7': 'belt02a', 'Img8': 'potato02b', 'Img9': 'computerkeyboard02', 'Img10': 'blender', 'Img11': 'rice', 'Img12': 'mushroom01', 'Img13': 'pencil01', 'Img14': 'blankImage', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'lollipop04'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'mail box', 'T1cue': 'Did you see the mail box?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'key01', 'Img2': 'apple07', 'Img3': 'ring01', 'Img4': 'leaf02a', 'Img5': 'hammer01', 'Img6': 'tableknife02', 'Img7': 'postalmailbox01', 'Img8': 'sponge01', 'Img9': 'baseball01a', 'Img10': 'thermometer02b', 'Img11': 'celery', 'Img12': 'blender', 'Img13': 'grape01', 'Img14': 'cucumber', 'Img15': 'tennisball01b', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'postalmailbox01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 3, 'TotalImg': 16, 'cueWord': 'parachute', 'T1cue': 'Did you see the parachute?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'brick', 'Img2': 'plate01b', 'Img3': 'pen04b', 'Img4': 'toaster01', 'Img5': 'screwdriver04b', 'Img6': 'candle01', 'Img7': 'envelope03a', 'Img8': 'parachute', 'Img9': 'coffeemaker', 'Img10': 'ring01', 'Img11': 'orange', 'Img12': 'clock01a', 'Img13': 'blender', 'Img14': 'calculator01', 'Img15': 'mushroom01', 'Img16': 'chain01', 'Img17': 'blankImage', 'T1_Identity': 'parachute'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'fish', 'T1cue': 'Did you see the fish?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'sock01a', 'Img2': 'spoon01', 'Img3': 'alligator', 'Img4': 'comb02a', 'Img5': 'printer02', 'Img6': 'rockbass', 'Img7': 'lamp04a', 'Img8': 'cymbal', 'Img9': 'greenolive', 'Img10': 'computerkeyboard02', 'Img11': 'blender', 'Img12': 'scarf', 'Img13': 'teabag', 'Img14': 'watermelon01', 'Img15': 'battery02b', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'rockbass'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'Rollerblade', 'T1cue': 'Did you see the Rollerblade?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'hammer01', 'Img2': 'sponge01', 'Img3': 'toaster01', 'Img4': 'cherry01', 'Img5': 'feather03a', 'Img6': 'mushroom01', 'Img7': 'rollerblade', 'Img8': 'pencil01', 'Img9': 'tennisball01b', 'Img10': 'brick', 'Img11': 'clock04', 'Img12': 'blender', 'Img13': 'teabag', 'Img14': 'garlic01a', 'Img15': 'envelope03a', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'rollerblade'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'saxophone', 'T1cue': 'Did you see the saxophone?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pizza', 'Img2': 'strawberry', 'Img3': 'potato02b', 'Img4': 'speaker04', 'Img5': 'battery02b', 'Img6': 'saxophone', 'Img7': 'dice05a', 'Img8': 'cellphone', 'Img9': 'globe', 'Img10': 'banana01', 'Img11': 'blender', 'Img12': 'baseball01a', 'Img13': 'toaster01', 'Img14': 'broom01', 'Img15': 'ring01', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'saxophone'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'scooter', 'T1cue': 'Did you see the scooter?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'thermometer02b', 'Img2': 'candle08b', 'Img3': 'comb02a', 'Img4': 'toothbrush03b', 'Img5': 'brick', 'Img6': 'scooter', 'Img7': 'key01', 'Img8': 'pineapple01a', 'Img9': 'candy', 'Img10': 'birthdaycandle', 'Img11': 'blender', 'Img12': 'stapler03a', 'Img13': 'teabag', 'Img14': 'medal02b', 'Img15': 'balloon01b', 'Img16': 'banana01', 'Img17': 'blankImage', 'T1_Identity': 'scooter'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'ladder', 'T1cue': 'Did you see the ladder?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'celery', 'Img2': 'orange', 'Img3': 'scissors01', 'Img4': 'balloon01b', 'Img5': 'avocado01', 'Img6': 'stepladder', 'Img7': 'mushroom01', 'Img8': 'sewingmachine01a', 'Img9': 'lighter01', 'Img10': 'dice05a', 'Img11': 'blender', 'Img12': 'fan', 'Img13': 'cd', 'Img14': 'sock01a', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'stepladder'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 4, 'TotalImg': 14, 'cueWord': 'License Plate', 'T1cue': 'Did you see the License Plate?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'toaster01', 'Img2': 'chain01', 'Img3': 'sponge01', 'Img4': 'baseball01a', 'Img5': 'licenseplate', 'Img6': 'belt02a', 'Img7': 'book01b', 'Img8': 'iron01b', 'Img9': 'grape01', 'Img10': 'blender', 'Img11': 'celery', 'Img12': 'onion', 'Img13': 'mushroom01', 'Img14': 'toothbrush03b', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'licenseplate'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'shower', 'T1cue': 'Did you see the shower?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'dice05a', 'Img2': 'watch02a', 'Img3': 'coffeemaker', 'Img4': 'lighter01', 'Img5': 'button01', 'Img6': 'shower', 'Img7': 'paintbrush01', 'Img8': 'microscope', 'Img9': 'plate01b', 'Img10': 'pen04b', 'Img11': 'blender', 'Img12': 'stapler03a', 'Img13': 'carrot01', 'Img14': 'shirt02', 'Img15': 'globe', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'shower'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'wrench', 'T1cue': 'Did you see the wrench?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cherry01', 'Img2': 'cymbal', 'Img3': 'envelope03a', 'Img4': 'foosballtable', 'Img5': 'shirt02', 'Img6': 'stubbywrench01a', 'Img7': 'sewingmachine01a', 'Img8': 'candle08b', 'Img9': 'battery02b', 'Img10': 'apple07', 'Img11': 'blender', 'Img12': 'screwdriver04b', 'Img13': 'strawberry', 'Img14': 'sunglasses04', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'stubbywrench01a'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'baseball bat', 'T1cue': 'Did you see the baseball bat?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pizza', 'Img2': 'printer02', 'Img3': 'medal02b', 'Img4': 'spoon01', 'Img5': 'baseballbat', 'Img6': 'lighter01', 'Img7': 'belt02a', 'Img8': 'watermelon01', 'Img9': 'celery', 'Img10': 'blender', 'Img11': 'screw02', 'Img12': 'comb02a', 'Img13': 'cauliflower01', 'Img14': 'lipstick02a', 'Img15': 'potato02b', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'baseballbat'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 5, 'TotalImg': 18, 'cueWord': 'bed', 'T1cue': 'Did you see the bed?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pencil01', 'Img2': 'broccoli01a', 'Img3': 'button01', 'Img4': 'sponge01', 'Img5': 'watermelon01', 'Img6': 'lipstick02a', 'Img7': 'comb02a', 'Img8': 'bed', 'Img9': 'lighter01', 'Img10': 'sock01a', 'Img11': 'spoon01', 'Img12': 'blueberry01', 'Img13': 'blender', 'Img14': 'onion', 'Img15': 'grape01', 'Img16': 'avocado01', 'Img17': 'blankImage', 'T1_Identity': 'bed'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'keys', 'T1cue': 'Did you see the keys?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'toiletpaper01a', 'Img2': 'mushroom01', 'Img3': 'medal02b', 'Img4': 'sandal', 'Img5': 'rice', 'Img6': 'foldingchair', 'Img7': 'feather03a', 'Img8': 'pizza', 'Img9': 'candle08b', 'Img10': 'garlic01a', 'Img11': 'blender', 'Img12': 'belt02a', 'Img13': 'cigarette', 'Img14': 'violin', 'Img15': 'lemon02', 'Img16': 'fork03c', 'Img17': 'blankImage', 'T1_Identity': 'foldingchair'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 4, 'TotalImg': 17, 'cueWord': 'butterfly', 'T1cue': 'Did you see the butterfly?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'speaker04', 'Img2': 'sewingmachine01a', 'Img3': 'eraser', 'Img4': 'violin', 'Img5': 'globe', 'Img6': 'belt02a', 'Img7': 'sunglasses04', 'Img8': 'butterfly', 'Img9': 'cd', 'Img10': 'greenolive', 'Img11': 'alligator', 'Img12': 'pear01', 'Img13': 'blender', 'Img14': 'screwdriver04b', 'Img15': 'banana01', 'Img16': 'cigarette', 'Img17': 'blankImage', 'T1_Identity': 'butterfly'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'Car', 'T1cue': 'Did you see the Car?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'leaf02a', 'Img2': 'apple07', 'Img3': 'cd', 'Img4': 'pineapple01a', 'Img5': 'envelope03a', 'Img6': 'car', 'Img7': 'coffeemaker', 'Img8': 'stapler03a', 'Img9': 'rice', 'Img10': 'feather03a', 'Img11': 'blender', 'Img12': 'balloon01b', 'Img13': 'avocado01', 'Img14': 'calculator01', 'Img15': 'watermelon01', 'Img16': 'teabag', 'Img17': 'blankImage', 'T1_Identity': 'car'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1P_T2P', 'Lag': 5, 'T1_PA': 'P', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 3, 'TotalImg': 16, 'cueWord': 'Chefs hat', 'T1cue': 'Did you see the Chefs hat?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'rice', 'Img2': 'watermelon01', 'Img3': 'tableknife02', 'Img4': 'scarf', 'Img5': 'computerkeyboard02', 'Img6': 'cauliflower01', 'Img7': 'battery02b', 'Img8': 'chefshat', 'Img9': 'book01b', 'Img10': 'sandal', 'Img11': 'sponge01', 'Img12': 'microscope', 'Img13': 'blender', 'Img14': 'fork03c', 'Img15': 'thermometer02b', 'Img16': 'apple07', 'Img17': 'blankImage', 'T1_Identity': 'chefshat'},
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      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 5, 'TotalImg': 18, 'cueWord': 'lollipop', 'T1cue': 'Did you see the lollipop?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'watermelon01', 'Img2': 'banana01', 'Img3': 'ring01', 'Img4': 'pencil01', 'Img5': 'tomato01', 'Img6': 'speaker04', 'Img7': 'cucumber', 'Img8': 'thermometer02b', 'Img9': 'key01', 'Img10': 'foosballtable', 'Img11': 'violin', 'Img12': 'spoon01', 'Img13': 'blender', 'Img14': 'dice05a', 'Img15': 'pen04b', 'Img16': 'mushroom01', 'Img17': 'blankImage', 'T1_Identity': 'jeans01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 4, 'TotalImg': 14, 'cueWord': 'mail box', 'T1cue': 'Did you see the mail box?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'button01', 'Img2': 'celery', 'Img3': 'birthdaycandle', 'Img4': 'apple07', 'Img5': 'avocado01', 'Img6': 'tennisball01b', 'Img7': 'dice05a', 'Img8': 'teabag', 'Img9': 'clock01a', 'Img10': 'blender', 'Img11': 'tomato01', 'Img12': 'scarf', 'Img13': 'orange', 'Img14': 'battery02b', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'jeep'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'parachute', 'T1cue': 'Did you see the parachute?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'binoculars01b', 'Img2': 'speaker04', 'Img3': 'sandal', 'Img4': 'envelope03a', 'Img5': 'plate01b', 'Img6': 'comb02a', 'Img7': 'battery02b', 'Img8': 'chain01', 'Img9': 'measuringcup01', 'Img10': 'blender', 'Img11': 'medal02b', 'Img12': 'lamp04a', 'Img13': 'tennisball01b', 'Img14': 'pizza', 'Img15': 'cigarette', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'knee'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'fish', 'T1cue': 'Did you see the fish?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'stapler03a', 'Img2': 'banana01', 'Img3': 'scissors01', 'Img4': 'coffeemaker', 'Img5': 'shirt02', 'Img6': 'leaf02a', 'Img7': 'pear01', 'Img8': 'sponge01', 'Img9': 'fork03c', 'Img10': 'tableknife02', 'Img11': 'blender', 'Img12': 'match', 'Img13': 'toothbrush03b', 'Img14': 'birthdaycandle', 'Img15': 'candle01', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'lighthouse'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 5, 'TotalImg': 17, 'cueWord': 'Rollerblade', 'T1cue': 'Did you see the Rollerblade?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'binoculars01b', 'Img2': 'cymbal', 'Img3': 'pizza', 'Img4': 'candy', 'Img5': 'paintbrush01', 'Img6': 'sponge01', 'Img7': 'grape01', 'Img8': 'thermometer02b', 'Img9': 'speaker04', 'Img10': 'lemon02', 'Img11': 'lipstick02a', 'Img12': 'blender', 'Img13': 'candle01', 'Img14': 'stapler03a', 'Img15': 'plate01b', 'Img16': 'pen04b', 'Img17': 'blankImage', 'T1_Identity': 'lion'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'saxophone', 'T1cue': 'Did you see the saxophone?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'globe', 'Img2': 'belt02a', 'Img3': 'sponge01', 'Img4': 'violin', 'Img5': 'fork03c', 'Img6': 'tomato01', 'Img7': 'clock01a', 'Img8': 'microscope', 'Img9': 'balloon01b', 'Img10': 'scarf', 'Img11': 'blender', 'Img12': 'pen04b', 'Img13': 'brick', 'Img14': 'brownsugar', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'microphone01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 4, 'TotalImg': 16, 'cueWord': 'scooter', 'T1cue': 'Did you see the scooter?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cigarette', 'Img2': 'coffeemaker', 'Img3': 'banana01', 'Img4': 'strawberry', 'Img5': 'clock01a', 'Img6': 'plate01b', 'Img7': 'spoon01', 'Img8': 'blueberry01', 'Img9': 'battery02b', 'Img10': 'pineapple01a', 'Img11': 'chain01', 'Img12': 'blender', 'Img13': 'candy', 'Img14': 'pen04b', 'Img15': 'teabag', 'Img16': 'birthdaycandle', 'Img17': 'blankImage', 'T1_Identity': 'nose'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 3, 'TotalImg': 16, 'cueWord': 'ladder', 'T1cue': 'Did you see the ladder?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'apple07', 'Img2': 'toiletpaper01a', 'Img3': 'pizza', 'Img4': 'dandelion', 'Img5': 'greenolive', 'Img6': 'eraser', 'Img7': 'microscope', 'Img8': 'violin', 'Img9': 'orange', 'Img10': 'lipstick02a', 'Img11': 'balloon01b', 'Img12': 'sandal', 'Img13': 'blender', 'Img14': 'fan', 'Img15': 'book01b', 'Img16': 'sewingmachine01a', 'Img17': 'blankImage', 'T1_Identity': 'ostrich'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 3, 'TotalImg': 13, 'cueWord': 'License Plate', 'T1cue': 'Did you see the License Plate?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'tomato01', 'Img2': 'pen04b', 'Img3': 'shirt02', 'Img4': 'carrot01', 'Img5': 'lamp04a', 'Img6': 'key01', 'Img7': 'pizza', 'Img8': 'avocado01', 'Img9': 'sewingmachine01a', 'Img10': 'blender', 'Img11': 'iron01b', 'Img12': 'book01b', 'Img13': 'chain01', 'Img14': 'blankImage', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'porcupine'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'shower', 'T1cue': 'Did you see the shower?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'sewingmachine01a', 'Img2': 'thermometer02b', 'Img3': 'sponge01', 'Img4': 'eraser', 'Img5': 'broccoli01a', 'Img6': 'fork03c', 'Img7': 'pizza', 'Img8': 'violin', 'Img9': 'belt02a', 'Img10': 'blender', 'Img11': 'pineapple01a', 'Img12': 'tennisball01b', 'Img13': 'dandelion', 'Img14': 'cauliflower01', 'Img15': 'lemon02', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'redfox'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 8, 'T2Loc': 13, 'PreDistractor': 7, 'PostDistractor': 4, 'TotalImg': 17, 'cueWord': 'wrench', 'T1cue': 'Did you see the wrench?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'clock01a', 'Img2': 'grape01', 'Img3': 'plate01b', 'Img4': 'key01', 'Img5': 'screwdriver04b', 'Img6': 'feather03a', 'Img7': 'pineapple01a', 'Img8': 'iron01b', 'Img9': 'toothbrush03b', 'Img10': 'comb02a', 'Img11': 'broom01', 'Img12': 'toaster01', 'Img13': 'blender', 'Img14': 'garlic01a', 'Img15': 'match', 'Img16': 'ashtray01', 'Img17': 'blankImage', 'T1_Identity': 'seal'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'baseball bat', 'T1cue': 'Did you see the baseball bat?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'avocado01', 'Img2': 'stapler03a', 'Img3': 'match', 'Img4': 'cauliflower01', 'Img5': 'paintbrush01', 'Img6': 'clock01a', 'Img7': 'coffeemaker', 'Img8': 'cd', 'Img9': 'balloon01b', 'Img10': 'cellphone', 'Img11': 'blender', 'Img12': 'pear01', 'Img13': 'toaster01', 'Img14': 'sponge01', 'Img15': 'orange', 'Img16': 'blueberry01', 'Img17': 'blankImage', 'T1_Identity': 'stool01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'bed', 'T1cue': 'Did you see the bed?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cellphone', 'Img2': 'tomato01', 'Img3': 'comb02a', 'Img4': 'candy', 'Img5': 'celery', 'Img6': 'cucumber', 'Img7': 'toaster01', 'Img8': 'fan', 'Img9': 'feather03a', 'Img10': 'pen04b', 'Img11': 'blender', 'Img12': 'blueberry01', 'Img13': 'plate01b', 'Img14': 'cherry01', 'Img15': 'baseball01a', 'Img16': 'candle08b', 'Img17': 'blankImage', 'T1_Identity': 'toolbox02'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'keys', 'T1cue': 'Did you see the keys?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pencil01', 'Img2': 'microscope', 'Img3': 'banana01', 'Img4': 'computerkeyboard02', 'Img5': 'celery', 'Img6': 'cellphone', 'Img7': 'scissors01', 'Img8': 'sock01a', 'Img9': 'book01b', 'Img10': 'onion', 'Img11': 'blender', 'Img12': 'binoculars01b', 'Img13': 'baseball01a', 'Img14': 'iron01b', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'treadmill'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'butterfly', 'T1cue': 'Did you see the butterfly?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'comb02a', 'Img2': 'key01', 'Img3': 'medal02b', 'Img4': 'battery02b', 'Img5': 'lighter01', 'Img6': 'microscope', 'Img7': 'watermelon01', 'Img8': 'sandal', 'Img9': 'coffeemaker', 'Img10': 'cellphone', 'Img11': 'blender', 'Img12': 'calculator01', 'Img13': 'cymbal', 'Img14': 'clock04', 'Img15': 'cucumber', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'uprightpiano01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'Car', 'T1cue': 'Did you see the Car?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'lighter01', 'Img2': 'hammer01', 'Img3': 'spoon01', 'Img4': 'chain01', 'Img5': 'cymbal', 'Img6': 'sponge01', 'Img7': 'lipstick02a', 'Img8': 'alligator', 'Img9': 'coffeemaker', 'Img10': 'watermelon01', 'Img11': 'cauliflower01', 'Img12': 'blender', 'Img13': 'broccoli01a', 'Img14': 'tableknife02', 'Img15': 'tennisball01b', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'wallclock'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2P', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'P', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 4, 'TotalImg': 14, 'cueWord': 'Chefs hat', 'T1cue': 'Did you see the Chefs hat?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'candle01', 'Img2': 'fork03c', 'Img3': 'plate01b', 'Img4': 'violin', 'Img5': 'computerkeyboard02', 'Img6': 'candy', 'Img7': 'calculator01', 'Img8': 'paintbrush01', 'Img9': 'cherry01', 'Img10': 'blender', 'Img11': 'teabag', 'Img12': 'banana01', 'Img13': 'cd', 'Img14': 'lighter01', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'horseshoe'},
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      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 4, 'TotalImg': 16, 'cueWord': 'boxing glove', 'T1cue': 'Did you see the boxing glove?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cherry01', 'Img2': 'cymbal', 'Img3': 'envelope03a', 'Img4': 'foosballtable', 'Img5': 'shirt02', 'Img6': 'cellphone', 'Img7': 'sewingmachine01a', 'Img8': 'candle08b', 'Img9': 'battery02b', 'Img10': 'apple07', 'Img11': 'pencil01', 'Img12': 'screwdriver04b', 'Img13': 'strawberry', 'Img14': 'sunglasses04', 'Img15': 'feather03a', 'Img16': 'rice', 'Img17': 'blankImage', 'T1_Identity': 'lollipop04'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'truck', 'T1cue': 'Did you see the truck?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pizza', 'Img2': 'printer02', 'Img3': 'medal02b', 'Img4': 'spoon01', 'Img5': 'grape01', 'Img6': 'lighter01', 'Img7': 'belt02a', 'Img8': 'watermelon01', 'Img9': 'celery', 'Img10': 'battery02b', 'Img11': 'screw02', 'Img12': 'comb02a', 'Img13': 'cauliflower01', 'Img14': 'lipstick02a', 'Img15': 'potato02b', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'postalmailbox01'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'sword', 'T1cue': 'Did you see the sword?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'pencil01', 'Img2': 'broccoli01a', 'Img3': 'button01', 'Img4': 'sponge01', 'Img5': 'watermelon01', 'Img6': 'lipstick02a', 'Img7': 'comb02a', 'Img8': 'fan', 'Img9': 'lighter01', 'Img10': 'sock01a', 'Img11': 'spoon01', 'Img12': 'blueberry01', 'Img13': 'belt02a', 'Img14': 'onion', 'Img15': 'grape01', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'parachute'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'Christmas lights', 'T1cue': 'Did you see the Christmas lights?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'toiletpaper01a', 'Img2': 'mushroom01', 'Img3': 'medal02b', 'Img4': 'sandal', 'Img5': 'rice', 'Img6': 'cd', 'Img7': 'feather03a', 'Img8': 'pizza', 'Img9': 'candle08b', 'Img10': 'garlic01a', 'Img11': 'toaster01', 'Img12': 'belt02a', 'Img13': 'cigarette', 'Img14': 'violin', 'Img15': 'lemon02', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'rockbass'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 5, 'TotalImg': 16, 'cueWord': 'shrimp', 'T1cue': 'Did you see the shrimp?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'speaker04', 'Img2': 'sewingmachine01a', 'Img3': 'eraser', 'Img4': 'violin', 'Img5': 'globe', 'Img6': 'belt02a', 'Img7': 'sunglasses04', 'Img8': 'cymbal', 'Img9': 'cd', 'Img10': 'greenolive', 'Img11': 'alligator', 'Img12': 'pear01', 'Img13': 'watch02a', 'Img14': 'screwdriver04b', 'Img15': 'banana01', 'Img16': 'cigarette', 'Img17': 'blankImage', 'T1_Identity': 'rollerblade'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'window', 'T1cue': 'Did you see the window?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'leaf02a', 'Img2': 'apple07', 'Img3': 'cd', 'Img4': 'pineapple01a', 'Img5': 'envelope03a', 'Img6': 'paintbrush01', 'Img7': 'coffeemaker', 'Img8': 'stapler03a', 'Img9': 'rice', 'Img10': 'feather03a', 'Img11': 'lemon02', 'Img12': 'balloon01b', 'Img13': 'avocado01', 'Img14': 'calculator01', 'Img15': 'watermelon01', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'saxophone'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 4, 'TotalImg': 16, 'cueWord': 'Eye', 'T1cue': 'Did you see the Eye?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'rice', 'Img2': 'watermelon01', 'Img3': 'tableknife02', 'Img4': 'scarf', 'Img5': 'computerkeyboard02', 'Img6': 'cauliflower01', 'Img7': 'battery02b', 'Img8': 'binoculars01b', 'Img9': 'book01b', 'Img10': 'sandal', 'Img11': 'sponge01', 'Img12': 'microscope', 'Img13': 'tomato01', 'Img14': 'fork03c', 'Img15': 'thermometer02b', 'Img16': 'apple07', 'Img17': 'blankImage', 'T1_Identity': 'scooter'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 5, 'TotalImg': 15, 'cueWord': 'flower', 'T1cue': 'Did you see the flower?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'clock01a', 'Img2': 'cellphone', 'Img3': 'toaster01', 'Img4': 'toothbrush03b', 'Img5': 'cauliflower01', 'Img6': 'microscope', 'Img7': 'comb02a', 'Img8': 'paintbrush01', 'Img9': 'scarf', 'Img10': 'clock04', 'Img11': 'sponge01', 'Img12': 'iron01b', 'Img13': 'watch02a', 'Img14': 'celery', 'Img15': 'ring01', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'stepladder'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 5, 'T2Loc': 10, 'PreDistractor': 4, 'PostDistractor': 4, 'TotalImg': 14, 'cueWord': 'music sheet', 'T1cue': 'Did you see the music sheet?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'celery', 'Img2': 'pencil01', 'Img3': 'fan', 'Img4': 'foosballtable', 'Img5': 'iron01b', 'Img6': 'shirt02', 'Img7': 'potato02b', 'Img8': 'fork03c', 'Img9': 'button01', 'Img10': 'pineapple01a', 'Img11': 'baseball01a', 'Img12': 'printer02', 'Img13': 'cauliflower01', 'Img14': 'dandelion', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'licenseplate'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 3, 'TotalImg': 14, 'cueWord': 'mirror', 'T1cue': 'Did you see the mirror?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'foosballtable', 'Img2': 'candy', 'Img3': 'envelope03a', 'Img4': 'microscope', 'Img5': 'pencil01', 'Img6': 'leaf02a', 'Img7': 'scissors01', 'Img8': 'watermelon01', 'Img9': 'grape01', 'Img10': 'dandelion', 'Img11': 'pineapple01a', 'Img12': 'hammer01', 'Img13': 'celery', 'Img14': 'thermometer02b', 'Img15': 'blankImage', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'shower'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 6, 'T2Loc': 11, 'PreDistractor': 5, 'PostDistractor': 4, 'TotalImg': 15, 'cueWord': 'tire', 'T1cue': 'Did you see the tire?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'cucumber', 'Img2': 'sponge01', 'Img3': 'alligator', 'Img4': 'pear01', 'Img5': 'ashtray01', 'Img6': 'hammer01', 'Img7': 'clock04', 'Img8': 'battery02b', 'Img9': 'fork03c', 'Img10': 'binoculars01b', 'Img11': 'mushroom01', 'Img12': 'broccoli01a', 'Img13': 'leaf02a', 'Img14': 'stapler03a', 'Img15': 'comb02a', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'stubbywrench01a'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 4, 'TotalImg': 16, 'cueWord': 'turtle', 'T1cue': 'Did you see the turtle?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'broom01', 'Img2': 'globe', 'Img3': 'cellphone', 'Img4': 'tableknife02', 'Img5': 'cauliflower01', 'Img6': 'scissors01', 'Img7': 'ring01', 'Img8': 'alligator', 'Img9': 'rice', 'Img10': 'toaster01', 'Img11': 'cigarette', 'Img12': 'grape01', 'Img13': 'microscope', 'Img14': 'cucumber', 'Img15': 'lamp04a', 'Img16': 'brick', 'Img17': 'blankImage', 'T1_Identity': 'baseballbat'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'toy horse', 'T1cue': 'Did you see the toy horse?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'leaf02a', 'Img2': 'pear01', 'Img3': 'measuringcup01', 'Img4': 'cigarette', 'Img5': 'fan', 'Img6': 'lemon02', 'Img7': 'teabag', 'Img8': 'tableknife02', 'Img9': 'ring01', 'Img10': 'pencil01', 'Img11': 'cellphone', 'Img12': 'cymbal', 'Img13': 'carrot01', 'Img14': 'binoculars01b', 'Img15': 'sock01a', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'bed'},
      {'TrialType': 'AB', 'CondType': 'Lag5_T1A_T2A', 'Lag': 5, 'T1_PA': 'A', 'T2_PA': 'A', 'T1Loc': 7, 'T2Loc': 12, 'PreDistractor': 6, 'PostDistractor': 3, 'TotalImg': 15, 'cueWord': 'tulip', 'T1cue': 'Did you see the tulip?', 'StimLength': 0.05, 'isi': 0.016, 'PicFolder': 'JPG\\', 'Img1': 'carrot01', 'Img2': 'greenolive', 'Img3': 'fork03c', 'Img4': 'chain01', 'Img5': 'ashtray01', 'Img6': 'watermelon01', 'Img7': 'tableknife02', 'Img8': 'printer02', 'Img9': 'comb02a', 'Img10': 'toaster01', 'Img11': 'orange', 'Img12': 'rice', 'Img13': 'fan', 'Img14': 'potato02b', 'Img15': 'feather03a', 'Img16': 'blankImage', 'Img17': 'blankImage', 'T1_Identity': 'foldingchair'}]
    Routine textFix
    Routine AB_Test
    Routine T1_Response
    Routine T2_Response
  LoopTerminator trials
