PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TestPsychoPy
  keyboardBackend = ioHub
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Routines
  Routine AB_Practice
    VariableComponent curImage
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #This is code
        trialClock = core.Clock()
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
        #imgOnScreen = False
      Each Frame:
        t = trialClock.getTime()



        curImage = "resources\\" + Img1
        imageCount = 1

        if t>StimLength + 1.5:
            curImage = "resources\\" + Img2
            imageCount = 2

        if t>StimLength*2 + 1.5:
            curImage = "resources\\" + Img3
            imageCount = 3

        if t>StimLength*3 + 1.5:
            curImage = "resources\\" + Img4
            imageCount = 4

        if t>StimLength*4 + 1.5:
            if Img5 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img5
                imageCount = 5

        if t>StimLength*5 + 1.5:
            if Img6 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img6
                imageCount = 6

        if t>StimLength*6 + 1.5:
            if Img7 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img7
                imageCount = 7

        if t>StimLength*7 + 1.5:
            if Img8 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img8
                imageCount = 8

        if t>StimLength*8 + 1.5:
            if Img9 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img9
                imageCount = 9

        if t>StimLength*9 + 1.5:
            if Img10 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img10
                imageCount = 10

        if t>StimLength*10 + 1.5:
            if Img11 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img11
                imageCount = 11

        if t>StimLength*11 + 1.5:
            if Img12 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img12
                imageCount = 12

        if t>StimLength*12 + 1.5:
            if Img13 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img13
                imageCount = 13

        if t>StimLength*13 + 1.5:
            if Img14 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img14
                imageCount = 14

        if t>StimLength*14 + 1.5:
            if Img15 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img15
                imageCount = 15

        if t>StimLength*15 + 1.5:
            if Img16 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img16
                imageCount = 16

        if t>StimLength*16 + 1.5:
            if Img17 == next_trial:
                continueRoutine = False
            else:
                curImage = "resources\\" + Img17
                imageCount = 17
    TextComponent Practice_Text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cueWord
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    TextComponent Fixation_Cross
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Rapid_Image_Present
      image [set every frame] = $curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Instructions here
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    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_T1_Response
    TextComponent T1_Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T1cue
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_T2_Response
    TextComponent T2_Response
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you see the blender
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'TrialType': 'AB', 'CondType': 'Lag1_T1P_T2A', 'Lag': 1, 'T1Loc': 2, 'T2Loc': 3, 'StimLength': 0.5, 'isi': 0.016, 'PreDistractor': 1, 'T1_PA': 1, 'T2_PA': 0, 'PostDistractor': 1, 'Img1': 'acorn.jpg', 'Img2': 'armadillo.jpg', 'Img3': 'badmintonracket.jpg', 'Img4': 'apron.jpg', 'Img5': None, 'Img6': None, 'Img7': None, 'Img8': None, 'Img9': None, 'Img10': None, 'Img11': None, 'Img12': None, 'Img13': None, 'Img14': None, 'Img15': None, 'Img16': None}]
    conditionsFile = C:/Users/User/OneDrive/Documents/GitHub/Test/Practice_Condition.xlsx
    loopType = random
    nReps = 5
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    Routine AB_Practice
    Routine Practice_T1_Response
    Routine Practice_T2_Response
  LoopTerminator trials
